<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Description>
        <Details>the petri-dish
time in dates, rates in 1/3h

</Details>
        <Title>ALI-culture infection cell-to-cell with infection inhibition by immunity</Title>
    </Description>
    <Space>
        <Lattice class="square">
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <Size symbol="size" value="1204,1204,0"/>
            <BoundaryConditions>
                <Condition type="noflux" boundary="x"/>
                <Condition type="noflux" boundary="y"/>
                <!--    <Disabled>
        <Condition type="noflux" boundary="-x"/>
    </Disabled>
-->
                <!--    <Disabled>
        <Condition type="noflux" boundary="-y"/>
    </Disabled>
-->
            </BoundaryConditions>
            <Domain boundary-type="noflux">
                <Circle diameter="1204"/>
            </Domain>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="2500"/>
        <TimeSymbol symbol="time"/>
    </Time>
    <Analysis>
        <ModelGraph include-tags="#untagged" format="png" reduced="false"/>
        <Gnuplotter decorate="false" time-step="10">
            <Plot>
                <Cells value="cell.type">
                    <ColorMap>
                        <Color value="1" color="sea-green"/>
                        <Color value="2" color="brown4"/>
                        <Color value="3" color="brown4"/>
                        <Color value="4" color="medium-blue"/>
                        <Color value="5" color="dark-violet"/>
                        <Color value="6" color="dark-violet"/>
                        <Color value="7" color="dark-salmon"/>
                        <Color value="8" color="red"/>
                        <Color value="9" color="red"/>
                        <Color value="10" color="dark-salmon"/>
                    </ColorMap>
                </Cells>
            </Plot>
            <Terminal name="png" size="2000, 2000, 0"/>
        </Gnuplotter>
        <!--    <Disabled>
        <Gnuplotter decorate="true" time-step="10">
            <Plot>
                <Field symbol-ref="ViralLoad"/>
            </Plot>
            <Terminal name="png"/>
        </Gnuplotter>
    </Disabled>
-->
        <Logger time-step="1.0">
            <Input>
                <Symbol symbol-ref="celltype.basal.size"/>
                <Symbol symbol-ref="celltype.secretory.size"/>
                <Symbol symbol-ref="celltype.ciliated.size"/>
                <Symbol symbol-ref="celltype.basal_infected.size"/>
                <Symbol symbol-ref="celltype.secretory_infected.size"/>
                <Symbol symbol-ref="celltype.ciliated_infected.size"/>
                <Symbol symbol-ref="celltype.basal_infectious.size"/>
                <Symbol symbol-ref="celltype.secretory_infectious.size"/>
                <Symbol symbol-ref="celltype.ciliated_infectious.size"/>
                <Symbol symbol-ref="total_viral_load"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
            <Plots>
                <Plot>
                    <Style style="points"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="time"/>
                    </X-axis>
                    <Y-axis>
                        <Symbol symbol-ref="celltype.basal.size"/>
                        <Symbol symbol-ref="celltype.secretory.size"/>
                        <Symbol symbol-ref="celltype.ciliated.size"/>
                    </Y-axis>
                </Plot>
                <Plot>
                    <Style style="points"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="time"/>
                    </X-axis>
                    <Y-axis>
                        <Symbol symbol-ref="celltype.basal_infected.size"/>
                        <Symbol symbol-ref="celltype.secretory_infected.size"/>
                        <Symbol symbol-ref="celltype.ciliated_infected.size"/>
                    </Y-axis>
                </Plot>
                <Plot>
                    <Style style="points"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="time"/>
                    </X-axis>
                    <Y-axis>
                        <Symbol symbol-ref="celltype.basal_infectious.size"/>
                        <Symbol symbol-ref="celltype.secretory_infectious.size"/>
                        <Symbol symbol-ref="celltype.ciliated_infectious.size"/>
                    </Y-axis>
                </Plot>
                <Plot>
                    <Style style="points"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="time"/>
                    </X-axis>
                    <Y-axis>
                        <Symbol symbol-ref="total_viral_load"/>
                    </Y-axis>
                </Plot>
            </Plots>
        </Logger>
        <!--    <Disabled>
        <Logger time-step="1.0">
            <Input>
                <Symbol symbol-ref="infected_neighbors"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
    </Disabled>
-->
    </Analysis>
    <Global>
        <Constant symbol="Nmax" value="47177*1.288"/>
        <Constant symbol="timestepsize" value="0.25"/>
        <Constant symbol="init_cell_number" value="47177"/>
        <Constant symbol="alphaB" value="0.338/24*timestepsize"/>
        <Constant symbol="diffS" value="0.084/24*timestepsize*4"/>
        <Constant symbol="diffCil" value="0.162/24*timestepsize*4"/>
        <Constant symbol="deltaB" value="0.0139/24*timestepsize"/>
        <Constant symbol="deltaS" value="0.083/24*timestepsize"/>
        <Constant symbol="deltaCil" value="0.029/24*timestepsize&#xa;"/>
        <Function symbol="cell_number">
            <Expression>sum(celltype.secretory.size, celltype.secretory_infected.size, celltype.secretory_infectious.size ,celltype.ciliated.size, celltype.ciliated_infected.size, celltype.ciliated_infectious.size, celltype.basal.size, celltype.basal_infected.size, celltype.basal_infectious.size)</Expression>
        </Function>
        <Constant symbol="locality" value="15"/>
        <Constant symbol="betaB" value="10^(-9.367795)/locality*47177*timestepsize*betaBsweep/3*innate_protection*(1-cc_ct_ratio)"/>
        <Constant symbol="betaS" value="10^(-9.403180)/locality*47177*timestepsize*betaSsweep/3*innate_protection*(1-cc_ct_ratio)"/>
        <Constant symbol="betaC" value="10^(-9.430063)/locality*47177*timestepsize*betaCsweep*innate_protection*(1-cc_ct_ratio)"/>
        <Constant symbol="kappaB" value="4*0.192848*timestepsize"/>
        <Constant symbol="kappaS" value="4*0.182802*timestepsize"/>
        <Constant symbol="kappaC" value="4*0.217471*timestepsize"/>
        <Constant symbol="rhoB" value="10^(4.376343)*timestepsize"/>
        <Constant symbol="rhoS" value="10^(4.613919)*timestepsize"/>
        <Constant symbol="rhoC" value="10^(4.689795)*timestepsize"/>
        <Constant symbol="db_I" value="4*0.080933*timestepsize*db_Isweep"/>
        <Constant symbol="ds_I" value="4*0.077071*timestepsize*ds_Isweep"/>
        <Constant symbol="dc_I" value="4*0.074392*timestepsize*dc_Isweep"/>
        <Constant symbol="c" value="0.63*timestepsize"/>
        <Field symbol="ViralLoad" value="0.0">
            <Diffusion rate="20"/>
        </Field>
        <Variable symbol="add_infection" value="0"/>
        <System solver="Bogacki-Shampine [adaptive, O(3)]" time-step="1.0">
            <DiffEqn symbol-ref="ViralLoad">
                <Expression>viralsekretion + add_infection - c * ViralLoad</Expression>
            </DiffEqn>
        </System>
        <Event trigger="when-true">
            <Condition>time >= 25</Condition>
            <Rule symbol-ref="add_infection">
                <Expression>0</Expression>
            </Rule>
        </Event>
        <Event>
            <Condition>time >= 24.5 and time &lt; 25.5</Condition>
            <Rule symbol-ref="add_infection">
                <Expression>2.6*10^6/(3.14/4*1204^2)*init_cell_number/47177*800</Expression>
            </Rule>
        </Event>
        <Variable symbol="total_viral_load" value="0.0"/>
        <Mapper>
            <Input value="ViralLoad"/>
            <Output mapping="sum" symbol-ref="total_viral_load"/>
        </Mapper>
        <Constant symbol="betaBsweep" value="1.0"/>
        <Constant symbol="betaSsweep" value="1.0"/>
        <Constant symbol="betaCsweep" value="1.0"/>
        <Constant symbol="db_Isweep" value="1.0"/>
        <Constant symbol="ds_Isweep" value="1.0"/>
        <Constant symbol="dc_Isweep" value="1.0"/>
        <Constant symbol="ccbetaB" value="1.0*cc_reduced*cc_ct_ratio/cceffectivness"/>
        <Constant symbol="ccbetaS" value="1.536*cc_reduced*cc_ct_ratio/cceffectivness"/>
        <Constant symbol="ccbetaC" value="4.33*cc_ct_ratio/cceffectivness"/>
        <Constant symbol="ccrhoB" value="1*timestepsize"/>
        <Constant symbol="ccrhoS" value="0.5786*timestepsize"/>
        <Constant symbol="ccrhoC" value="0.48590*timestepsize"/>
        <Constant symbol="cceffectivness" value="20"/>
        <Constant symbol="cc_ct_ratio" value="0.9"/>
        <Function symbol="apicalLayer_number">
            <Expression>sum(celltype.secretory.size, celltype.ciliated.size)</Expression>
        </Function>
        <Constant symbol="Ninfmax" value="(1-0.397)*init_cell_number"/>
        <Function symbol="innate_protection">
            <Expression>1-(1/refractory)*(1-apicalLayer_number/Ninfmax)</Expression>
        </Function>
        <Constant symbol="refractory" value="0.75"/>
        <Constant symbol="cc_reduced" value="0.2"/>
    </Global>
    <CellTypes>
        <CellType class="medium" name="medium">
            <Property symbol="viralsekretion" value="0"/>
        </CellType>
        <CellType class="biological" name="basal">
            <VolumeConstraint strength="10" target="60"/>
            <SurfaceConstraint mode="aspherity" strength="10" target=".9"/>
            <ConnectivityConstraint/>
            <Function symbol="p_divB">
                <Expression>1-exp(-(alphaB*((Nmax-cell_number)/Nmax)))</Expression>
            </Function>
            <Function symbol="p_deathB">
                <Expression>1-exp(-deltaB)</Expression>
            </Function>
            <Function symbol="p_diffS">
                <Expression>1-exp(-diffS)</Expression>
            </Function>
            <AddCell overwrite="true">
                <Count>if(cell_number > 25000, celltype.basal.size*p_divB , 0)</Count>
                <Distribution>1</Distribution>
                <Triggers>
                    <Rule symbol-ref="Compartment">
                        <Expression>0.0</Expression>
                    </Rule>
                </Triggers>
            </AddCell>
            <CellDivision division-plane="minor">
                <Condition>rand_uni(0,1)&lt;p_divB  and (cell_number&lt;= 25000)</Condition>
                <Triggers>
                    <Rule symbol-ref="Compartment">
                        <Expression>0.0</Expression>
                    </Rule>
                </Triggers>
            </CellDivision>
            <ChangeCellType name="to_secr" time-step="1.0" newCellType="secretory">
                <Condition>Compartment==5</Condition>
                <Triggers>
                    <Rule symbol-ref="Compartment">
                        <Expression>0</Expression>
                    </Rule>
                </Triggers>
            </ChangeCellType>
            <CellDeath>
                <Condition>rand_uni(0,1)&lt; p_deathB
</Condition>
            </CellDeath>
            <Property symbol="Compartment" value="rand_int(0,4)"/>
            <Event trigger="when-true" time-step="1.0">
                <Condition>rand_uni(0,1)&lt;p_diffS</Condition>
                <Rule symbol-ref="Compartment">
                    <Expression>Compartment + 1</Expression>
                </Rule>
            </Event>
            <Property symbol="viralsekretion" value="0"/>
            <ChangeCellType time-step="0.0" newCellType="basal_infected">
                <Condition>rand_uni(0,1)&lt;p_infBas</Condition>
            </ChangeCellType>
            <Function symbol="p_infBas">
                <Expression>1-exp(-betaB*internal_load)</Expression>
            </Function>
            <Mapper name="internal viral load" time-step="1.0">
                <Input value="ViralLoad"/>
                <Output mapping="sum" symbol-ref="internal_load"/>
            </Mapper>
            <Property symbol="internal_load" value="0.0"/>
            <NeighborhoodReporter time-step="1.0">
                <Input value="innate_protection*ccbetaB*((cell.type == celltype.basal_infectious.id)*ccrhoB + (cell.type == celltype.secretory_infectious.id)*ccrhoS + (cell.type == celltype.ciliated_infectious.id)*ccrhoC)" scaling="cell"/>
                <Output mapping="sum" symbol-ref="infected_neighbors"/>
            </NeighborhoodReporter>
            <Property symbol="infected_neighbors" value="0.0"/>
            <ChangeCellType newCellType="basal_infected">
                <Condition>rand_uni(0,1)&lt;1-exp(-infected_neighbors)</Condition>
            </ChangeCellType>
        </CellType>
        <CellType class="biological" name="basal_infected">
            <Property symbol="t_Bbecomeinfectious" value="0.0"/>
            <Function symbol="p_Bbecomeinfectious">
                <Expression>1-exp(-kappaB)</Expression>
            </Function>
            <ChangeCellType time-step="1.0" newCellType="basal_infectious">
                <Condition>Compartment == 5</Condition>
                <!--    <Disabled>
        <Triggers>
            <Rule symbol-ref="Compartment">
                <Expression>0.0</Expression>
            </Rule>
        </Triggers>
    </Disabled>
-->
            </ChangeCellType>
            <VolumeConstraint strength="10" target="60"/>
            <SurfaceConstraint mode="aspherity" strength="10" target=".9"/>
            <Property symbol="viralsekretion" value="0"/>
            <Event trigger="when-true" time-step="1.0">
                <Condition>rand_uni(0,1)&lt;p_Bbecomeinfectious</Condition>
                <Rule symbol-ref="Compartment">
                    <Expression>Compartment + 1</Expression>
                </Rule>
            </Event>
            <Property symbol="Compartment" value="0.0"/>
            <ConnectivityConstraint/>
        </CellType>
        <CellType class="biological" name="basal_infectious">
            <CellDeath>
                <Condition>Compartment_d == 5</Condition>
            </CellDeath>
            <Function symbol="p_deathBInfectious">
                <Expression>1-exp(-db_I)</Expression>
            </Function>
            <VolumeConstraint strength="10" target="60"/>
            <SurfaceConstraint mode="aspherity" strength="10" target=".9"/>
            <Property symbol="viralsekretion" value="rhoB/cell.volume"/>
            <Equation symbol-ref="viralsekretion">
                <Expression>rhoB/cell.volume</Expression>
            </Equation>
            <Event trigger="when-true" time-step="1.0">
                <Condition>rand_uni(0,1)&lt;p_deathBInfectious</Condition>
                <Rule symbol-ref="Compartment_d">
                    <Expression>Compartment_d + 1</Expression>
                </Rule>
            </Event>
            <Property symbol="Compartment_d" value="0.0"/>
            <ConnectivityConstraint/>
        </CellType>
        <CellType class="biological" name="secretory">
            <VolumeConstraint strength="100" target="60"/>
            <SurfaceConstraint mode="aspherity" strength="100" target=".9"/>
            <ConnectivityConstraint/>
            <Function symbol="p_diffCil">
                <Expression>1-exp(-diffCil)</Expression>
            </Function>
            <Function symbol="p_deathS">
                <Expression>1-exp(-deltaS)</Expression>
            </Function>
            <CellDeath>
                <Condition>rand_uni(0,1)&lt; p_deathS
</Condition>
            </CellDeath>
            <ChangeCellType name="to_ cil" time-step="1.0" newCellType="ciliated">
                <Condition>Compartment==5</Condition>
            </ChangeCellType>
            <Property symbol="Compartment" value="rand_int(0,4)"/>
            <Event trigger="when-true" time-step="1.0">
                <Condition>rand_uni(0,1)&lt;p_diffCil</Condition>
                <Rule symbol-ref="Compartment">
                    <Expression>Compartment + 1</Expression>
                </Rule>
            </Event>
            <Property symbol="viralsekretion" value="0"/>
            <ChangeCellType time-step="1.0" newCellType="secretory_infected">
                <Condition>rand_uni(0,1)&lt;p_infSec</Condition>
            </ChangeCellType>
            <Function symbol="p_infSec">
                <Expression>1-exp(-betaS*internal_load)</Expression>
            </Function>
            <Mapper name="internal viral load" time-step="1.0">
                <Input value="ViralLoad"/>
                <Output mapping="sum" symbol-ref="internal_load"/>
            </Mapper>
            <Property symbol="internal_load" value="0.0"/>
            <NeighborhoodReporter time-step="1.0">
                <Input value="innate_protection*ccbetaS*((cell.type == celltype.basal_infectious.id)*ccrhoB + (cell.type == celltype.secretory_infectious.id)*ccrhoS + (cell.type == celltype.ciliated_infectious.id)*ccrhoC)" scaling="cell"/>
                <Output mapping="sum" symbol-ref="infected_neighbors"/>
            </NeighborhoodReporter>
            <Property symbol="infected_neighbors" value="0.0"/>
            <ChangeCellType time-step="1.0" newCellType="secretory_infected">
                <Condition>rand_uni(0,1)&lt;1-exp(-infected_neighbors)</Condition>
            </ChangeCellType>
        </CellType>
        <CellType class="biological" name="secretory_infected">
            <Property symbol="t_Sbecomeinfectious" value="0.0"/>
            <Function symbol="p_Sbecomeinfectious">
                <Expression>1-exp(-kappaS)</Expression>
            </Function>
            <ChangeCellType newCellType="secretory_infectious">
                <Condition>Compartment == 5</Condition>
                <!--    <Disabled>
        <Triggers>
            <Rule symbol-ref="Compartment">
                <Expression>0.0</Expression>
            </Rule>
        </Triggers>
    </Disabled>
-->
            </ChangeCellType>
            <VolumeConstraint strength="100" target="60"/>
            <SurfaceConstraint mode="aspherity" strength="100" target=".9"/>
            <Property symbol="viralsekretion" value="0"/>
            <Event trigger="when-true" time-step="1.0">
                <Condition>rand_uni(0,1)&lt;p_Sbecomeinfectious</Condition>
                <Rule symbol-ref="Compartment">
                    <Expression>Compartment + 1</Expression>
                </Rule>
            </Event>
            <Property symbol="Compartment" value="0.0"/>
            <ConnectivityConstraint/>
        </CellType>
        <CellType class="biological" name="secretory_infectious">
            <CellDeath>
                <Condition>Compartment_d == 5</Condition>
            </CellDeath>
            <Function symbol="p_deathSInfectious">
                <Expression>1 - exp(-ds_I)</Expression>
            </Function>
            <VolumeConstraint strength="100" target="60"/>
            <SurfaceConstraint mode="aspherity" strength="100" target=".9"/>
            <Property symbol="viralsekretion" value="rhoS/cell.volume"/>
            <Equation symbol-ref="viralsekretion">
                <Expression>rhoS/cell.volume</Expression>
            </Equation>
            <Property symbol="Compartment_d" value="0.0"/>
            <Event trigger="when-true" time-step="1.0">
                <Condition>rand_uni(0,1)&lt;p_deathSInfectious</Condition>
                <Rule symbol-ref="Compartment_d">
                    <Expression>Compartment_d + 1</Expression>
                </Rule>
            </Event>
            <ConnectivityConstraint/>
        </CellType>
        <CellType class="biological" name="ciliated">
            <ConnectivityConstraint/>
            <SurfaceConstraint mode="aspherity" strength="100" target=".9"/>
            <VolumeConstraint strength="100" target="60"/>
            <CellDeath>
                <Condition>rand_uni(0,1)&lt; p_deathCil
</Condition>
            </CellDeath>
            <Function symbol="p_deathCil">
                <Expression>1-exp(-deltaCil)</Expression>
            </Function>
            <Property symbol="viralsekretion" value="0"/>
            <ChangeCellType time-step="1.0" newCellType="ciliated_infected">
                <Condition>rand_uni(0,1)&lt;p_infCil</Condition>
            </ChangeCellType>
            <Function symbol="p_infCil">
                <Expression>1-exp(-betaC*internal_load)</Expression>
            </Function>
            <Mapper name="internal viral load" time-step="1.0">
                <Input value="ViralLoad"/>
                <Output mapping="sum" symbol-ref="internal_load"/>
            </Mapper>
            <Property symbol="internal_load" value="0.0"/>
            <NeighborhoodReporter time-step="1.0">
                <Input value="innate_protection*ccbetaC*((cell.type == celltype.basal_infectious.id)*ccrhoB + (cell.type == celltype.secretory_infectious.id)*ccrhoS + (cell.type == celltype.ciliated_infectious.id)*ccrhoC)" scaling="cell"/>
                <Output mapping="sum" symbol-ref="infected_neighbors"/>
            </NeighborhoodReporter>
            <Property symbol="infected_neighbors" value="0.0"/>
            <ChangeCellType time-step="1.0" newCellType="ciliated_infected">
                <Condition>rand_uni(0,1)&lt;1-exp(-infected_neighbors)</Condition>
            </ChangeCellType>
        </CellType>
        <CellType class="biological" name="ciliated_infected">
            <Function symbol="p_Cbecomeinfectious">
                <Expression>1-exp(-kappaC)</Expression>
            </Function>
            <ChangeCellType time-step="1.0" newCellType="ciliated_infectious">
                <Condition>Compartment == 5</Condition>
                <!--    <Disabled>
        <Triggers>
            <Rule symbol-ref="Compartment">
                <Expression>0.0</Expression>
            </Rule>
        </Triggers>
    </Disabled>
-->
            </ChangeCellType>
            <SurfaceConstraint mode="aspherity" strength="100" target=".9"/>
            <VolumeConstraint strength="100" target="60"/>
            <Property symbol="t_birth_cil_inf" value="0.0"/>
            <Property symbol="viralsekretion" value="0"/>
            <Event trigger="when-true" time-step="1.0">
                <Condition>rand_uni(0,1)&lt;p_Cbecomeinfectious</Condition>
                <Rule symbol-ref="Compartment">
                    <Expression>Compartment + 1</Expression>
                </Rule>
            </Event>
            <Property symbol="Compartment" value="0.0"/>
            <ConnectivityConstraint/>
        </CellType>
        <CellType class="biological" name="ciliated_infectious">
            <CellDeath>
                <Condition>Compartment_d == 5</Condition>
            </CellDeath>
            <Function symbol="p_deathCInfectious">
                <Expression>1 - exp(-dc_I)</Expression>
            </Function>
            <SurfaceConstraint mode="aspherity" strength="100" target=".9"/>
            <VolumeConstraint strength="100" target="60"/>
            <Property symbol="t_birth_cil" value="0.0"/>
            <Property symbol="viralsekretion" value="rhoC/cell.volume"/>
            <Equation symbol-ref="viralsekretion">
                <Expression>rhoC/cell.volume</Expression>
            </Equation>
            <Event trigger="when-true" time-step="1.0">
                <Condition>rand_uni(0,1)&lt;p_deathCInfectious</Condition>
                <Rule symbol-ref="Compartment_d">
                    <Expression>Compartment_d + 1</Expression>
                </Rule>
            </Event>
            <Property symbol="Compartment_d" value="0.0"/>
            <ConnectivityConstraint/>
        </CellType>
    </CellTypes>
    <CellPopulations>
        <Population size="0" name="basal" type="basal">
            <InitCircle number-of-cells="0.397*init_cell_number" mode="random">
                <Dimensions center="size.x/2,size.y/2,0" radius="size.x/2"/>
            </InitCircle>
        </Population>
        <Population size="0" name="secretory" type="secretory">
            <InitCircle name="secretory" number-of-cells="0.134*init_cell_number" mode="random">
                <Dimensions center="size.x/2,size.y/2,0" radius="size.x/2"/>
            </InitCircle>
        </Population>
        <Population size="0" name="ciliated" type="ciliated">
            <InitCircle name="ciliated" tags="" number-of-cells="0.469*init_cell_number" mode="random">
                <Dimensions center="size.x/2,size.y/2,0" radius="size.x/2"/>
            </InitCircle>
        </Population>
        <Population size="0" name="basal infectious" type="basal_infectious">
            <InitCircle name="" tags="" number-of-cells="0" mode="random">
                <Dimensions center="size.x/2,size.y/2,0" radius="size.x/2"/>
            </InitCircle>
        </Population>
        <Population size="0" name="ciliated infectious" type="ciliated_infectious">
            <InitCircle name="" tags="" number-of-cells="0" mode="random">
                <Dimensions center="size.x/2,size.y/2,0" radius="size.x/2"/>
            </InitCircle>
        </Population>
        <Population size="0" name="secretory infectious" type="secretory_infectious">
            <InitCircle name="" tags="" number-of-cells="0" mode="random">
                <Dimensions center="size.x/2,size.y/2,0" radius="size.x/2"/>
            </InitCircle>
        </Population>
    </CellPopulations>
    <CPM>
        <Interaction>
            <Contact type2="secretory" value="-20" type1="ciliated"/>
            <Contact type2="ciliated" value="10" type1="ciliated"/>
            <Contact type2="secretory" value="50" type1="secretory"/>
            <Contact type2="medium" value="-10" type1="ciliated"/>
            <Contact type2="medium" value="-10" type1="secretory"/>
            <Contact type2="basal" value="50" type1="basal"/>
            <Contact type2="ciliated" value="-30" type1="basal"/>
            <Contact type2="secretory" value="-30" type1="basal"/>
        </Interaction>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>6</Order>
            </Neighborhood>
        </ShapeSurface>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration symbol="mcs_duration" value="1"/>
            <MetropolisKinetics temperature="37"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
        </MonteCarloSampler>
    </CPM>
</MorpheusModel>
